PsychoPy2experiment version="3.0.0+brain1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Save tag file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = EMG_Controller_Training
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Routines
  Routine Instrukcja
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      tagParams [set every repeat] = {}
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      text:
        Instrucja do eksperymentu.
        Wykonuj dłonią gesty których opis pojawi się na ekranie. Każdy gest wykonaj raz po zobaczeniu tekstu. Najpierw będzie seria próbna, potem właściwa. By zacząć naciśnij spację.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      tagParams [set every repeat] = {}
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  Routine Test
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      tagParams [set every repeat] = {}
      text = Dłoń w górę
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      tagParams [set every repeat] = {}
      text = Dłoń w dół
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    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = 2
      tagParams [set every repeat] = {}
      text = Nie rób nic
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    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      tagParams [set every repeat] = {}
      text = Wróć do pozycji wyjściowej
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    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      tagParams [set every repeat] = {}
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      text:
        Wróć do pozycji wyjściowej
    TextComponent text_15
      letterHeight = 0.1
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.0
      tagParams [set every repeat] = {}
      text = Wróć do pozycji wyjściowej
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  Routine GOGOGO
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      tagParams [set every repeat] = {}
      text = Nacisnij spację by zacząć serię właściwą.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      tagParams [set every repeat] = {}
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  Routine Zbieranie_Danych
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      tagName [set every repeat] = gora
      tagParams [set every repeat] = {}
      text = Dłoń w górę.
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    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.5
      tagName [set every repeat] = dol
      tagParams [set every repeat] = {}
      text = Dłoń w dół
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    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1.5
      tagName [set every repeat] = piesc
      tagParams [set every repeat] = {}
      text = Nie rób nic
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    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2
      tagParams [set every repeat] = {}
      text = Wróć do pozycji wyjściowej
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    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
      tagParams [set every repeat] = {}
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      text:
        Wróć do pozycji wyjściowej
    TextComponent text_12
      letterHeight = 0.1
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 2
      tagParams [set every repeat] = {}
      text = Wróć do pozycji wyjściowej
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  Routine Thx
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      tagParams [set every repeat] = {}
      text = Dziękujemy za współpracę :)
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Flow
  Routine Instrukcja
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine Test
  LoopTerminator trials
  Routine GOGOGO
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine Zbieranie_Danych
  LoopTerminator trials_2
  Routine Thx
